<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>1</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:Pin>5</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.TimeOfDay</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>csv_savepath</Name>
      </Expression>
      <Expression xsi:type="Format" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFullPath" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\eyecam_recordings\230209_DMM_DMM001_test\230209_DMM_DMM001_test_04.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>avi_savepath</Name>
      </Expression>
      <Expression xsi:type="Format" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:GetFullPath" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\eyecam_recordings\230209_DMM_DMM001_test\230209_DMM_DMM001_test_04.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>recording_info</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="4-animal" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DMM001</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="2-date" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>230209</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="3-person" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>DMM</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="5-recording" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>test</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>base_filename</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>\</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>_</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>base_filename</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>base_filename</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="1-directory" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\eyecam_recordings</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="6-num" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>04</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>savepath_noext</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>savepath_noext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.avi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>avi_savepath</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>savepath_noext</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>.csv</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="rx:ReplaySubject">
              <Name>csv_savepath</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="11" Label="Source5" />
            <Edge From="2" To="11" Label="Source4" />
            <Edge From="3" To="11" Label="Source6" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source7" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="23" Label="Source2" />
            <Edge From="15" To="23" Label="Source4" />
            <Edge From="16" To="23" Label="Source6" />
            <Edge From="17" To="23" Label="Source3" />
            <Edge From="18" To="23" Label="Source5" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source7" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="33" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>TTL_Arduino</ard:Name>
          <ard:PortName>COM1</ard:PortName>
          <ard:BaudRate>9600</ard:BaudRate>
          <ard:SamplingInterval>5</ard:SamplingInterval>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="13" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>